load_file("subiter.hoc")
load_file("stdrun.hoc")

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, axon[36], dend[102]

proc topol() { local i
  for i = 0, 1 connect axon[i](0), soma(0.5)
  for i = 2, 3 connect axon[i](0), axon[1](1)
  for i = 4, 5 connect axon[i](0), axon[i-1](1)
  connect axon[6](0), axon[4](1)
  for i = 7, 9 connect axon[i](0), axon[i-1](1)
  connect axon[10](0), axon[8](1)
  connect axon[11](0), axon[7](1)
  for i = 12, 15 connect axon[i](0), axon[i-1](1)
  connect axon[16](0), axon[14](1)
  connect axon[17](0), axon[13](1)
  connect axon[18](0), axon[12](1)
  for i = 19, 20 connect axon[i](0), axon[18](1)
  connect axon[21](0), axon[11](1)
  for i = 22, 23 connect axon[i](0), axon[i-1](1)
  connect axon[24](0), axon[22](1)
  for i = 25, 26 connect axon[i](0), axon[i-1](1)
  connect axon[27](0), axon[25](1)
  connect axon[28](0), axon[24](1)
  connect axon[29](0), axon[21](1)
  for i = 30, 31 connect axon[i](0), axon[29](1)
  connect axon[32](0), axon[6](1)
  for i = 33, 34 connect axon[i](0), axon[32](1)
  connect axon[35](0), axon[3](1)
  for i = 0, 1 connect dend[i](0), soma(0.5)
  for i = 2, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  for i = 5, 6 connect dend[i](0), dend[4](1)
  connect dend[7](0), dend[1](1)
  for i = 8, 9 connect dend[i](0), dend[7](1)
  for i = 10, 11 connect dend[i](0), dend[9](1)
  connect dend[12](0), soma(0.5)
  for i = 13, 14 connect dend[i](0), dend[12](1)
  connect dend[15](0), soma(0.5)
  for i = 16, 20 connect dend[i](0), dend[i-1](1)
  connect dend[21](0), dend[19](1)
  for i = 22, 23 connect dend[i](0), dend[21](1)
  for i = 24, 25 connect dend[i](0), dend[23](1)
  connect dend[26](0), dend[18](1)
  for i = 27, 28 connect dend[i](0), dend[26](1)
  connect dend[29](0), dend[17](1)
  connect dend[30](0), dend[16](1)
  for i = 31, 32 connect dend[i](0), dend[i-1](1)
  connect dend[33](0), dend[31](1)
  for i = 34, 35 connect dend[i](0), dend[33](1)
  connect dend[36](0), dend[30](1)
  connect dend[37](0), dend[15](1)
  for i = 38, 39 connect dend[i](0), dend[37](1)
  for i = 40, 41 connect dend[i](0), dend[39](1)
  connect dend[42](0), soma(0.5)
  for i = 43, 44 connect dend[i](0), dend[42](1)
  for i = 45, 46 connect dend[i](0), dend[44](1)
  connect dend[47](0), dend[42](1)
  for i = 48, 49 connect dend[i](0), dend[i-1](1)
  connect dend[50](0), dend[48](1)
  for i = 51, 52 connect dend[i](0), dend[50](1)
  connect dend[53](0), dend[47](1)
  for i = 54, 55 connect dend[i](0), dend[53](1)
  for i = 56, 57 connect dend[i](0), soma(0.5)
  for i = 58, 60 connect dend[i](0), dend[i-1](1)
  connect dend[61](0), dend[59](1)
  for i = 62, 63 connect dend[i](0), dend[i-1](1)
  connect dend[64](0), dend[62](1)
  connect dend[65](0), dend[61](1)
  for i = 66, 68 connect dend[i](0), dend[i-1](1)
  connect dend[69](0), dend[67](1)
  connect dend[70](0), dend[66](1)
  connect dend[71](0), dend[65](1)
  for i = 72, 73 connect dend[i](0), dend[71](1)
  for i = 74, 76 connect dend[i](0), dend[i-1](1)
  connect dend[77](0), dend[75](1)
  connect dend[78](0), dend[74](1)
  connect dend[79](0), dend[73](1)
  for i = 80, 81 connect dend[i](0), dend[79](1)
  connect dend[82](0), dend[58](1)
  for i = 83, 84 connect dend[i](0), dend[82](1)
  for i = 85, 87 connect dend[i](0), dend[i-1](1)
  connect dend[88](0), dend[86](1)
  connect dend[89](0), dend[85](1)
  connect dend[90](0), dend[84](1)
  connect dend[91](0), dend[57](1)
  for i = 92, 94 connect dend[i](0), dend[i-1](1)
  connect dend[95](0), dend[93](1)
  for i = 96, 97 connect dend[i](0), dend[95](1)
  for i = 98, 99 connect dend[i](0), dend[97](1)
  connect dend[100](0), dend[92](1)
  connect dend[101](0), dend[91](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-46.8671, -49.4171, -412.23, 5.61275)
	pt3dadd(-48.6507, -47.4889, -407.98, 7.85305)
	pt3dadd(-49.1, -47.0179, -404.54, 8.91351)
	pt3dadd(-49.1684, -46.6979, -401.92, 10.7563)
	pt3dadd(-49.4605, -46.2279, -399.2, 12.6204)
	pt3dadd(-49.6965, -46.4341, -398.16, 13.2083)
	pt3dadd(-49.2402, -45.9026, -394.83, 14.7437)
	pt3dadd(-49.9295, -46.3557, -389.43, 12.6313)
	pt3dadd(-50.1158, -46.7431, -388.01, 12.1487)
	pt3dadd(-50.8386, -46.5404, -385.78, 10.5533)
	pt3dadd(-53.6721, -49.0127, -382.23, 4.40934)
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  }
}
proc shape3d_2() {
  axon[5] {	pt3dadd(179.5, 51.04, -634.2, 0.3)
	pt3dadd(181.33, 51.5, -636.33, 0.3)
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  }
}
proc shape3d_3() {
  axon[18] {	pt3dadd(143.83, 142.06, -636.49, 0.3)
	pt3dadd(144.58, 143.53, -636.6, 0.3)
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  }
}
proc shape3d_4() {
  dend {	pt3dadd(-69.82, -31.34, -301.83, 0.68)
	pt3dadd(-71.55, -30.79, -298.55, 0.68)
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  }
}
proc shape3d_5() {
  dend[8] {	pt3dadd(-47.52, -77.57, -234.56, 0.6)
	pt3dadd(-46.22, -78.52, -231.46, 0.6)
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  }
}
proc shape3d_6() {
  dend[14] {	pt3dadd(-71.61, -280.11, -429.74, 0.08)
	pt3dadd(-69.23, -282.16, -429.74, 0.08)
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  }
}
proc shape3d_7() {
  dend[23] {	pt3dadd(44.88, -38.77, -664.04, 0.53)
	pt3dadd(45.9, -36.14, -666.82, 0.53)
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  }
}
proc shape3d_8() {
  dend[33] {	pt3dadd(-6.83, -79.65, -485.71, 0.53)
	pt3dadd(-5.28, -81.8, -488.55, 0.53)
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  }
}
proc shape3d_9() {
  dend[44] {	pt3dadd(-42.2, -102.64, -413.16, 0.9)
	pt3dadd(-41.68, -105.82, -413.16, 0.9)
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  }
}
proc shape3d_10() {
  dend[53] {	pt3dadd(-50.22, -78.52, -450.04, 0.75)
	pt3dadd(-50.38, -81.67, -450.47, 0.75)
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  }
}
proc shape3d_11() {
  dend[62] {	pt3dadd(-19, 41.39, -426.04, 0.6)
	pt3dadd(-18.11, 44.54, -425.98, 0.6)
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  }
}
proc shape3d_12() {
  dend[74] {	pt3dadd(6.63, 38.04, -524.99, 0.68)
	pt3dadd(7.56, 37.84, -528.81, 0.68)
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  }
}
proc shape3d_13() {
  dend[84] {	pt3dadd(-43.74, 36.97, -302.53, 0.9)
	pt3dadd(-44.41, 37.58, -301.01, 0.9)
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  }
}
proc shape3d_14() {
  dend[92] {	pt3dadd(-77.56, 15.13, -227.75, 0.98)
	pt3dadd(-78.33, 16.01, -221.47, 0.98)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
}

objref all, somatic, axonal, basal
proc subsets() { local i
  objref all, somatic, axonal, basal
  all = new SectionList()
    soma all.append()
    for i=0, 35 axon[i] all.append()
    for i=0, 101 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 35 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 101 dend[i] basal.append()

}
proc geom() {
}
proc geom_nseg() {

  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}

celsius = 24

proc biophys() {
	forsec all {

	}	

	forsec basal {

        insert passsd
	g_passsd=1.1231e-05
	erev_passsd=-66.164
	insert Kleaksd
	gkl_Kleaksd=3.2258e-06
	insert IM
	gbar_IM = 0.000075
	insert IMminret
	gbar_IMminret=0 // 0.000075
	insert Ikdrf
	gbar_Ikdrf = 0.0006
	insert Ikdrs
	gbar_Ikdrs = 0.00023
	insert Ika
	gbar_Ika = 0.00025
	Ra=300
	cm=0.9
	ek=-95
	insert cal
	gcalbar_cal = 0.0025
	insert cad
	insert cat
	gbar_cat = 0.00025
	insert kca
	gkbar_kca = 0.00055
	insert Nadend
	gna_Nadend = 0.0117
	ena=90
	insert Ih
	gkhbar_Ih = 0.00005
	eh=-32

}
	forsec somatic {

        insert passsd
	g_passsd=1.1231e-05
	erev_passsd=-66.164
	insert Kleaksd
	gkl_Kleaksd=3.2258e-06
	Ra=300
	cm=0.9
	ek=-95
	insert IM
	gbar_IM=0.000075
	insert IMminret
	gbar_IMminret=0 // 0.000075
	insert Ikdrf
	gbar_Ikdrf = 0.0006
	insert Ikdrs
	gbar_Ikdrs = 0.00023
	insert Ika
	gbar_Ika = 0.00025
	insert Nasoma
	gna_Nasoma = 0.0107
	ena=90
	insert Ih
	gkhbar_Ih = 0.00005
	eh=-32
		
}
        
        
        
	forsec axonal {

        insert passaxon
	g_passaxon=6.1771e-05
	erev_passaxon=-66.164
	insert Kleakaxon
	gkl_Kleakaxon=1.7742e-05
	insert Ikdrfaxon
	gbar_Ikdrfaxon = 0.0006
	insert Ikdrsaxon
	gbar_Ikdrsaxon = 0.00023
	Ra=300
	cm=0.9
	ek=-95
	insert Naaxon
	gna_Naaxon = 0.0117
	ena=90
/* 
        soma distance(0,0.5)
        dist1=distance(0)
        dist2=distance(1)
        tav.append(dist1)
	*/ 	
        
}


}

/*
objref f1, f2

f1 = new File()
f1.ropen("HS_0731_optimized_syn_per_area_excit.dat")


f2 = new File()
f2.ropen("HS_0731_optimized_syn_per_area_inhib.dat")

proc syn_per_area_define(){

forsec basal{
		insert excit
		insert inhib
        //rate_excit = 0
        //rate_inhib = 0
	for (x,0){
		syn_per_area_excit = f1.scanvar()
		syn_per_area_inhib = f2.scanvar()
	}
}
forsec somatic{
		insert excit
		insert inhib
        //rate_excit = 0
        //rate_inhib = 0
	for (x,0){
		syn_per_area_excit = f1.scanvar()
		syn_per_area_inhib = f2.scanvar()
	}
}
}
*/

access soma

celldef()
//syn_per_area_define()
