load_file("subiter.hoc")
load_file("stdrun.hoc")

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, axon, dend[95]

proc topol() { local i
  connect axon(0), soma(0.5)
  connect dend(0), soma(0.5)
  for i = 1, 4 connect dend[i](0), dend[i-1](1)
  connect dend[5](0), dend[3](1)
  connect dend[6](0), dend[2](1)
  connect dend[7](0), dend[1](1)
  for i = 8, 9 connect dend[i](0), dend[i-1](1)
  connect dend[10](0), dend[8](1)
  connect dend[11](0), dend[7](1)
  for i = 12, 13 connect dend[i](0), dend[11](1)
  for i = 14, 15 connect dend[i](0), dend[13](1)
  connect dend[16](0), dend(1)
  for i = 17, 18 connect dend[i](0), dend[i-1](1)
  connect dend[19](0), dend[17](1)
  connect dend[20](0), dend[16](1)
  for i = 21, 22 connect dend[i](0), dend[20](1)
  connect dend[23](0), soma(0.5)
  for i = 24, 26 connect dend[i](0), dend[i-1](1)
  connect dend[27](0), dend[25](1)
  for i = 28, 29 connect dend[i](0), dend[27](1)
  connect dend[30](0), dend[24](1)
  for i = 31, 32 connect dend[i](0), dend[30](1)
  connect dend[33](0), dend[23](1)
  for i = 34, 37 connect dend[i](0), dend[i-1](1)
  connect dend[38](0), dend[36](1)
  for i = 39, 40 connect dend[i](0), dend[38](1)
  connect dend[41](0), dend[35](1)
  connect dend[42](0), dend[34](1)
  connect dend[43](0), dend[33](1)
  for i = 44, 45 connect dend[i](0), dend[i-1](1)
  connect dend[46](0), dend[44](1)
  connect dend[47](0), dend[43](1)
  connect dend[48](0), soma(0.5)
  for i = 49, 50 connect dend[i](0), dend[48](1)
  for i = 51, 52 connect dend[i](0), dend[50](1)
  for i = 53, 54 connect dend[i](0), dend[i-1](1)
  connect dend[55](0), dend[53](1)
  for i = 56, 58 connect dend[i](0), dend[i-1](1)
  connect dend[59](0), dend[57](1)
  connect dend[60](0), dend[56](1)
  connect dend[61](0), dend[55](1)
  connect dend[62](0), dend[52](1)
  for i = 63, 64 connect dend[i](0), soma(0.5)
  for i = 65, 67 connect dend[i](0), dend[i-1](1)
  connect dend[68](0), dend[66](1)
  connect dend[69](0), dend[65](1)
  for i = 70, 71 connect dend[i](0), dend[i-1](1)
  connect dend[72](0), dend[70](1)
  connect dend[73](0), dend[69](1)
  connect dend[74](0), dend[64](1)
  for i = 75, 78 connect dend[i](0), dend[i-1](1)
  connect dend[79](0), dend[77](1)
  connect dend[80](0), dend[76](1)
  for i = 81, 82 connect dend[i](0), dend[80](1)
  connect dend[83](0), dend[75](1)
  connect dend[84](0), dend[74](1)
  for i = 85, 88 connect dend[i](0), dend[i-1](1)
  connect dend[89](0), dend[87](1)
  connect dend[90](0), dend[86](1)
  connect dend[91](0), dend[85](1)
  connect dend[92](0), dend[84](1)
  for i = 93, 94 connect dend[i](0), dend[92](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-1306.65, -1326.06, -422.02, 8.52348)
	pt3dadd(-1305.12, -1326.44, -418.52, 10.5725)
	pt3dadd(-1303.9, -1324.68, -418, 11.1168)
	pt3dadd(-1305.21, -1322.15, -414.21, 14.0174)
	pt3dadd(-1305.4, -1321.23, -411.69, 14.0267)
	pt3dadd(-1305.43, -1319.76, -405.83, 14.0085)
	pt3dadd(-1305.59, -1318.69, -402.67, 12.7388)
	pt3dadd(-1304.5, -1317.24, -396.64, 10.4502)
	pt3dadd(-1305.99, -1315.71, -391.47, 6.06964)
  }
  axon {pt3dclear()
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  }
}
proc shape3d_2() {
  dend[9] {	pt3dadd(-1281, -1226.9, -278.48, 0.3)
	pt3dadd(-1281.17, -1226.07, -278.48, 0.3)
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  }
}
proc shape3d_3() {
  dend[18] {	pt3dadd(-1292.3, -1230.97, -244.03, 0.6)
	pt3dadd(-1291.29, -1232.18, -238.74, 0.6)
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  }
}
proc shape3d_4() {
  dend[25] {	pt3dadd(-1315.83, -1181.25, -195.57, 0.83)
	pt3dadd(-1315.3, -1179.41, -192.18, 0.83)
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  }
}
proc shape3d_5() {
  dend[39] {	pt3dadd(-1364.51, -1260.59, -228.7, 0.68)
	pt3dadd(-1365.1, -1259.49, -225.59, 0.68)
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  }
}
proc shape3d_6() {
  dend[47] {	pt3dadd(-1375.31, -1358.13, -358.23, 0.68)
	pt3dadd(-1375.78, -1359.54, -359.38, 0.68)
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  }
}
proc shape3d_7() {
  dend[54] {	pt3dadd(-1378.71, -1403.68, -374.19, 0.9)
	pt3dadd(-1379.49, -1405.4, -374.19, 0.9)
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  }
}
proc shape3d_8() {
  dend[63] {	pt3dadd(-1179.79, -1306.4, -356.45, 0.3)
	pt3dadd(-1177.95, -1306.67, -353.81, 0.3)
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  }
}
proc shape3d_9() {
  dend[72] {	pt3dadd(-1251.53, -1472.41, -675.64, 0.83)
	pt3dadd(-1252.04, -1472.85, -678.45, 0.75)
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  }
}
proc shape3d_10() {
  dend[82] {	pt3dadd(-1268.78, -1442.05, -547.54, 0.68)
	pt3dadd(-1268.49, -1443.4, -549.55, 0.68)
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  }
}
proc shape3d_11() {
  dend[90] {	pt3dadd(-1333.67, -1402.48, -455.84, 0.53)
	pt3dadd(-1333.34, -1398.64, -455.78, 0.53)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
}

objref all, somatic, axonal, basal
proc subsets() { local i
  objref all, somatic, axonal, basal
  all = new SectionList()
    soma all.append()
    axon all.append()
    for i=0, 94 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    axon axonal.append()

  basal = new SectionList()
    for i=0, 94 dend[i] basal.append()

}
proc geom() {
}
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}

celsius = 24

proc biophys() {
	forsec all {

	}	

	forsec basal {

        insert passsd
	g_passsd=1.1231e-05
	erev_passsd=-66.164
	insert Kleaksd
	gkl_Kleaksd=3.2258e-06
	insert IM
	gbar_IM = 0.000075
	insert IMminret
	gbar_IMminret=0 // 0.000075
	insert Ikdrf
	gbar_Ikdrf = 0.0006
	insert Ikdrs
	gbar_Ikdrs = 0.00023
	insert Ika
	gbar_Ika = 0.00025
	Ra=300
	cm=0.9
	ek=-95
	insert cal
	gcalbar_cal = 0.0025
	insert cad
	insert cat
	gbar_cat = 0.00025
	insert kca
	gkbar_kca = 0.00055
	insert Nadend
	gna_Nadend = 0.0117
	ena=90
	insert Ih
	gkhbar_Ih = 0.00005
	eh=-32
		

}
	forsec somatic {

        insert passsd
	g_passsd=1.1231e-05
	erev_passsd=-66.164
	insert Kleaksd
	gkl_Kleaksd=3.2258e-06
	Ra=300
	cm=0.9
	ek=-95
	insert IM
	gbar_IM=0.000075
	insert IMminret
	gbar_IMminret=0 // 0.000075
	insert Ikdrf
	gbar_Ikdrf = 0.0006
	insert Ikdrs
	gbar_Ikdrs = 0.00023
	insert Ika
	gbar_Ika = 0.00025
	insert Nasoma
	gna_Nasoma = 0.0107
	ena=90
	insert Ih
	gkhbar_Ih = 0.00005
	eh=-32
		
}
        
        
        
	forsec axonal {

        insert passaxon
	g_passaxon=6.1771e-05
	erev_passaxon=-66.164
	insert Kleakaxon
	gkl_Kleakaxon=1.7742e-05
	insert Ikdrfaxon
	gbar_Ikdrfaxon = 0.0006
	insert Ikdrsaxon
	gbar_Ikdrsaxon = 0.00023
	Ra=300
	cm=0.9
	ek=-95
	insert Naaxon
	gna_Naaxon = 0.0117
	ena=90
/* 
        soma distance(0,0.5)
        dist1=distance(0)
        dist2=distance(1)
        tav.append(dist1)
	*/ 	
        
}


}
/*
objref f1, f2

f1 = new File()
f1.ropen("HS_5091_optimized_syn_per_area_excit.dat")


f2 = new File()
f2.ropen("HS_5091_optimized_syn_per_area_inhib.dat")

proc syn_per_area_define(){

forsec basal{
		insert excit
		insert inhib
        //rate_excit = 0
        //rate_inhib = 0
	for (x,0){
		syn_per_area_excit = f1.scanvar()
		syn_per_area_inhib = f2.scanvar()
	}
}
forsec somatic{
		insert excit
		insert inhib
        //rate_excit = 0
        //rate_inhib = 0
	for (x,0){
		syn_per_area_excit = f1.scanvar()
		syn_per_area_inhib = f2.scanvar()
	}
}
}
*/

access soma

celldef()
//syn_per_area_define()
