load_file("subiter.hoc")
load_file("stdrun.hoc")

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, axon, dend[88]

proc topol() { local i
  connect axon(0), soma(0.5)
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend[i-1](1)
  connect dend[3](0), dend[1](1)
  connect dend[4](0), dend(1)
  connect dend[5](0), soma(0.5)
  for i = 6, 7 connect dend[i](0), dend[i-1](1)
  connect dend[8](0), dend[6](1)
  connect dend[9](0), dend[5](1)
  for i = 10, 11 connect dend[i](0), dend[9](1)
  connect dend[12](0), soma(0.5)
  for i = 13, 15 connect dend[i](0), dend[i-1](1)
  connect dend[16](0), dend[14](1)
  connect dend[17](0), dend[13](1)
  for i = 18, 19 connect dend[i](0), dend[i-1](1)
  connect dend[20](0), dend[18](1)
  connect dend[21](0), dend[17](1)
  for i = 22, 23 connect dend[i](0), dend[i-1](1)
  connect dend[24](0), dend[22](1)
  for i = 25, 26 connect dend[i](0), dend[24](1)
  connect dend[27](0), dend[21](1)
  connect dend[28](0), dend[12](1)
  for i = 29, 31 connect dend[i](0), dend[i-1](1)
  connect dend[32](0), dend[30](1)
  connect dend[33](0), dend[29](1)
  connect dend[34](0), dend[28](1)
  for i = 35, 37 connect dend[i](0), dend[i-1](1)
  connect dend[38](0), dend[36](1)
  for i = 39, 40 connect dend[i](0), dend[38](1)
  connect dend[41](0), dend[35](1)
  for i = 42, 43 connect dend[i](0), dend[41](1)
  connect dend[44](0), dend[34](1)
  connect dend[45](0), soma(0.5)
  for i = 46, 49 connect dend[i](0), dend[i-1](1)
  connect dend[50](0), dend[48](1)
  connect dend[51](0), dend[47](1)
  for i = 52, 53 connect dend[i](0), dend[51](1)
  connect dend[54](0), dend[46](1)
  for i = 55, 56 connect dend[i](0), dend[54](1)
  connect dend[57](0), dend[45](1)
  for i = 58, 59 connect dend[i](0), dend[57](1)
  connect dend[60](0), soma(0.5)
  for i = 61, 64 connect dend[i](0), dend[i-1](1)
  connect dend[65](0), dend[63](1)
  connect dend[66](0), dend[62](1)
  connect dend[67](0), dend[61](1)
  connect dend[68](0), dend[60](1)
  connect dend[69](0), soma(0.5)
  for i = 70, 71 connect dend[i](0), dend[i-1](1)
  connect dend[72](0), dend[70](1)
  connect dend[73](0), dend[69](1)
  for i = 74, 75 connect dend[i](0), dend[i-1](1)
  connect dend[76](0), dend[74](1)
  for i = 77, 78 connect dend[i](0), dend[76](1)
  for i = 79, 80 connect dend[i](0), dend[78](1)
  connect dend[81](0), dend[73](1)
  for i = 82, 83 connect dend[i](0), dend[81](1)
  for i = 84, 85 connect dend[i](0), dend[i-1](1)
  connect dend[86](0), dend[84](1)
  connect dend[87](0), dend[83](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(174.578, -1168.15, -297.66, 4.95476)
	pt3dadd(176.248, -1165.94, -301.43, 9.22055)
	pt3dadd(176.515, -1164.47, -304.88, 12.4411)
	pt3dadd(176.79, -1164.58, -307, 13.0813)
	pt3dadd(177.226, -1163.74, -310.72, 13.7027)
	pt3dadd(178.146, -1162.69, -315.18, 14.7225)
	pt3dadd(178.98, -1161.92, -319.48, 13.5953)
	pt3dadd(178.968, -1161.45, -327.08, 10.4269)
  }
  axon {pt3dclear()
	pt3dstyle(1, 177.454, -1163.48, -311.826)
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  }
}
proc shape3d_2() {
  dend[5] {	pt3dadd(168.95, -1153.15, -302.38, 1.64)
	pt3dadd(167.82, -1152.06, -303.5, 1.64)
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  }
}
proc shape3d_3() {
  dend[10] {	pt3dadd(58.48, -1079.35, -312.74, 0.59)
	pt3dadd(57.78, -1077.3, -312.74, 0.59)
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  }
}
proc shape3d_4() {
  dend[19] {	pt3dadd(113.46, -1159.17, -105.41, 0.74)
	pt3dadd(113.2, -1157.71, -101.38, 0.74)
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  }
}
proc shape3d_5() {
  dend[23] {	pt3dadd(61.78, -1040.67, 42.54, 0.67)
	pt3dadd(61.24, -1040.89, 42.54, 0.67)
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  }
}
proc shape3d_6() {
  dend[31] {	pt3dadd(295.88, -1233.88, -278.33, 0.52)
	pt3dadd(297.15, -1234.07, -278.43, 0.52)
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  }
}
proc shape3d_7() {
  dend[37] {	pt3dadd(129.47, -1185.74, -65, 0.82)
	pt3dadd(128.99, -1184.69, -60.17, 0.82)
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  }
}
proc shape3d_8() {
  dend[44] {	pt3dadd(186.28, -1269.6, -123.2, 0.82)
	pt3dadd(186.43, -1270.1, -123.2, 0.52)
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  }
}
proc shape3d_9() {
  dend[50] {	pt3dadd(246.55, -954.9, -680.07, 0.74)
	pt3dadd(246.82, -954.12, -682.72, 0.74)
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  }
}
proc shape3d_10() {
  dend[55] {	pt3dadd(118.67, -1075.91, -425.53, 0.74)
	pt3dadd(117.12, -1074.29, -425.53, 0.74)
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  }
}
proc shape3d_11() {
  dend[61] {	pt3dadd(238.5, -1188.2, -332.49, 1.11)
	pt3dadd(240.29, -1189.09, -332.49, 1.11)
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  }
}
proc shape3d_12() {
  dend[71] {  }
  dend[72] {pt3dclear()
	pt3dadd(216.75, -1142.54, -347.73, 0.67)
	pt3dadd(215.74, -1141.89, -353.2, 0.67)
	pt3dadd(214.72, -1140.61, -355.06, 0.67)
	pt3dadd(213.14, -1139.82, -356.92, 0.67)
	pt3dadd(211.71, -1138.38, -358.51, 0.67)
	pt3dadd(210.66, -1138.3, -358.51, 0.67)
	pt3dadd(210.44, -1137.2, -359.58, 0.67)
	pt3dadd(209.6, -1136.49, -359.63, 0.52)
	pt3dadd(208.16, -1135.05, -361.22, 0.52)
	pt3dadd(206.37, -1133.15, -361.28, 0.52)
	pt3dadd(204.54, -1131.77, -362.82, 0.52)
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  }
}
proc shape3d_13() {
  dend[78] {	pt3dadd(299.45, -1107.94, -597.86, 0.74)
	pt3dadd(300.56, -1107.6, -597.86, 0.74)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
}

objref all, somatic, axonal, basal
proc subsets() { local i
  objref all, somatic, axonal, basal
  all = new SectionList()
    soma all.append()
    axon all.append()
    for i=0, 87 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    axon axonal.append()

  basal = new SectionList()
    for i=0, 87 dend[i] basal.append()

}
proc geom() {
}
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}

celsius = 24

proc biophys() {
	forsec all {

	}	

	forsec basal {

        insert passsd
	g_passsd=1.1231e-05
	erev_passsd=-66.164
	insert Kleaksd
	gkl_Kleaksd=3.2258e-06
	insert IM
	gbar_IM = 0.000075
	insert IMminret
	gbar_IMminret=0 // 0.000075
	insert Ikdrf
	gbar_Ikdrf = 0.0006
	insert Ikdrs
	gbar_Ikdrs = 0.00023
	insert Ika
	gbar_Ika = 0.00025
	Ra=300
	cm=0.9
	ek=-95
	insert cal
	gcalbar_cal = 0.0025
	insert cad
	insert cat
	gbar_cat = 0.00025
	insert kca
	gkbar_kca = 0.00055
	insert Nadend
	gna_Nadend = 0.0117
	ena=90
	insert Ih
	gkhbar_Ih = 0.00005
	eh=-32
		

}
	forsec somatic {

        insert passsd
	g_passsd=1.1231e-05
	erev_passsd=-66.164
	insert Kleaksd
	gkl_Kleaksd=3.2258e-06
	Ra=300
	cm=0.9
	ek=-95
	insert IM
	gbar_IM=0.000075
	insert IMminret
	gbar_IMminret=0 // 0.000075
	insert Ikdrf
	gbar_Ikdrf = 0.0006
	insert Ikdrs
	gbar_Ikdrs = 0.00023
	insert Ika
	gbar_Ika = 0.00025
	insert Nasoma
	gna_Nasoma = 0.0107
	ena=90
	insert Ih
	gkhbar_Ih = 0.00005
	eh=-32
		
}
        
        
        
	forsec axonal {

        insert passaxon
	g_passaxon=6.1771e-05
	erev_passaxon=-66.164
	insert Kleakaxon
	gkl_Kleakaxon=1.7742e-05
	insert Ikdrfaxon
	gbar_Ikdrfaxon = 0.0006
	insert Ikdrsaxon
	gbar_Ikdrsaxon = 0.00023
	Ra=300
	cm=0.9
	ek=-95
	insert Naaxon
	gna_Naaxon = 0.0117
	ena=90
/* 
        soma distance(0,0.5)
        dist1=distance(0)
        dist2=distance(1)
        tav.append(dist1)
	*/ 	
        
}


}
/*
objref f1, f2

f1 = new File()
f1.ropen("HS_5101_optimized_syn_per_area_excit.dat")


f2 = new File()
f2.ropen("HS_5101_optimized_syn_per_area_inhib.dat")

proc syn_per_area_define(){

forsec basal{
		insert excit
		insert inhib
        //rate_excit = 0
        //rate_inhib = 0
	for (x,0){
		syn_per_area_excit = f1.scanvar()
		syn_per_area_inhib = f2.scanvar()
	}
}
forsec somatic{
		insert excit
		insert inhib
        //rate_excit = 0
        //rate_inhib = 0
	for (x,0){
		syn_per_area_excit = f1.scanvar()
		syn_per_area_inhib = f2.scanvar()
	}
}
}
*/

access soma

celldef()
//syn_per_area_define()
