load_file("subiter.hoc")
load_file("stdrun.hoc")

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, axon[7], dend[73]

proc topol() { local i
  connect axon(0), soma(0.5)
  for i = 1, 3 connect axon[i](0), axon[i-1](1)
  connect axon[4](0), axon[2](1)
  connect axon[5](0), axon[1](1)
  connect axon[6](0), axon(1)
  connect dend(0), soma(0.5)
  for i = 1, 5 connect dend[i](0), dend[i-1](1)
  connect dend[6](0), dend[4](1)
  connect dend[7](0), dend[3](1)
  connect dend[8](0), dend[2](1)
  connect dend[9](0), dend[1](1)
  for i = 10, 11 connect dend[i](0), dend[i-1](1)
  connect dend[12](0), dend[10](1)
  connect dend[13](0), dend[9](1)
  connect dend[14](0), dend(1)
  for i = 15, 16 connect dend[i](0), dend[14](1)
  for i = 17, 18 connect dend[i](0), dend[16](1)
  for i = 19, 20 connect dend[i](0), dend[18](1)
  connect dend[21](0), soma(0.5)
  for i = 22, 26 connect dend[i](0), dend[i-1](1)
  connect dend[27](0), dend[25](1)
  connect dend[28](0), dend[24](1)
  for i = 29, 30 connect dend[i](0), dend[28](1)
  for i = 31, 33 connect dend[i](0), dend[i-1](1)
  connect dend[34](0), dend[32](1)
  for i = 35, 36 connect dend[i](0), dend[34](1)
  connect dend[37](0), dend[31](1)
  connect dend[38](0), dend[30](1)
  connect dend[39](0), dend[23](1)
  for i = 40, 41 connect dend[i](0), dend[39](1)
  connect dend[42](0), dend[22](1)
  for i = 43, 44 connect dend[i](0), dend[42](1)
  for i = 45, 46 connect dend[i](0), dend[44](1)
  for i = 47, 48 connect dend[i](0), dend[46](1)
  connect dend[49](0), dend[21](1)
  for i = 50, 51 connect dend[i](0), dend[i-1](1)
  connect dend[52](0), dend[50](1)
  connect dend[53](0), dend[49](1)
  for i = 54, 55 connect dend[i](0), dend[i-1](1)
  connect dend[56](0), dend[54](1)
  connect dend[57](0), dend[53](1)
  for i = 58, 59 connect dend[i](0), dend[57](1)
  for i = 60, 61 connect dend[i](0), dend[59](1)
  for i = 62, 63 connect dend[i](0), dend[61](1)
  for i = 64, 65 connect dend[i](0), dend[63](1)
  for i = 66, 67 connect dend[i](0), dend[i-1](1)
  connect dend[68](0), dend[66](1)
  connect dend[69](0), dend[65](1)
  connect dend[70](0), soma(0.5)
  for i = 71, 72 connect dend[i](0), dend[70](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-219.891, 29.0568, -278.88, 3.31463)
	pt3dadd(-219.803, 30.0178, -280.5, 7.71463)
	pt3dadd(-220.443, 29.6617, -284.36, 9.37874)
	pt3dadd(-220.956, 27.2511, -292.08, 12.5382)
	pt3dadd(-220.986, 26.8588, -294.48, 13.1393)
	pt3dadd(-220.451, 28.9103, -287.28, 11.1971)
	pt3dadd(-220.822, 27.8153, -298.6, 9.60937)
	pt3dadd(-221, 28.0879, -301, 6.3491)
	pt3dadd(-221.577, 28.4161, -303.45, 3.22317)
  }
  axon {pt3dclear()
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  }
}
proc shape3d_2() {
  dend[2] {	pt3dadd(-230.3, 0.16, -352.37, 1.15)
	pt3dadd(-230.93, 0.59, -355.5, 1.15)
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  }
}
proc shape3d_3() {
  dend[8] {	pt3dadd(-242.94, 40.76, -413.03, 0.69)
	pt3dadd(-243.94, 41.7, -415.17, 0.69)
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  }
}
proc shape3d_4() {
  dend[12] {	pt3dadd(-229.15, -113.3, -420.65, 0.69)
	pt3dadd(-229.04, -115.4, -419.45, 0.69)
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  }
}
proc shape3d_5() {
  dend[17] {	pt3dadd(-264.86, -122.16, -298.7, 0.38)
	pt3dadd(-265.38, -123.64, -298.65, 0.38)
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  }
}
proc shape3d_6() {
  dend[28] {	pt3dadd(-249.82, 28.18, -194.7, 1.07)
	pt3dadd(-249.39, 28.61, -190.01, 1.07)
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  }
}
proc shape3d_7() {
  dend[40] {	pt3dadd(-258.83, 126.83, -88.88, 0.38)
	pt3dadd(-259, 126.81, -84.13, 0.38)
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  }
}
proc shape3d_8() {
  dend[49] {	pt3dadd(-205.34, 72.02, -280.66, 1.3)
	pt3dadd(-205.82, 73.3, -280.61, 1.3)
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  }
}
proc shape3d_9() {
  dend[55] {	pt3dadd(-241.81, 254.65, -243.05, 0.61)
	pt3dadd(-242.16, 256, -241.59, 0.61)
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  }
}
proc shape3d_10() {
  dend[70] {	pt3dadd(-229.88, 36.65, -316.91, 1)
	pt3dadd(-230.73, 36.63, -318.52, 1)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
}

objref all, somatic, axonal, basal
proc subsets() { local i
  objref all, somatic, axonal, basal
  all = new SectionList()
    soma all.append()
    for i=0, 6 axon[i] all.append()
    for i=0, 72 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 6 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 72 dend[i] basal.append()

}
proc geom() {
}
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}

celsius = 24

proc biophys() {
	forsec all {

	}	

	forsec basal {

        insert passsd
	g_passsd=1.1231e-05
	erev_passsd=-66.164
	insert Kleaksd
	gkl_Kleaksd=3.2258e-06
	insert IM
	gbar_IM = 0.000075
	insert IMminret
	gbar_IMminret=0 // 0.000075
	insert Ikdrf
	gbar_Ikdrf = 0.0006
	insert Ikdrs
	gbar_Ikdrs = 0.00023
	insert Ika
	gbar_Ika = 0.00025
	Ra=300
	cm=0.9
	ek=-95
	insert cal
	gcalbar_cal = 0.0025
	insert cad
	insert cat
	gbar_cat = 0.00025
	insert kca
	gkbar_kca = 0.00055
	insert Nadend
	gna_Nadend = 0.0117
	ena=90
	insert Ih
	gkhbar_Ih = 0.00005
	eh=-32
		

}
	forsec somatic {

        insert passsd
	g_passsd=1.1231e-05
	erev_passsd=-66.164
	insert Kleaksd
	gkl_Kleaksd=3.2258e-06
	Ra=300
	cm=0.9
	ek=-95
	insert IM
	gbar_IM=0.000075
	insert IMminret
	gbar_IMminret=0 // 0.000075
	insert Ikdrf
	gbar_Ikdrf = 0.0006
	insert Ikdrs
	gbar_Ikdrs = 0.00023
	insert Ika
	gbar_Ika = 0.00025
	insert Nasoma
	gna_Nasoma = 0.0107
	ena=90
	insert Ih
	gkhbar_Ih = 0.00005
	eh=-32
		
}
        
        
        
	forsec axonal {

        insert passaxon
	g_passaxon=6.1771e-05
	erev_passaxon=-66.164
	insert Kleakaxon
	gkl_Kleakaxon=1.7742e-05
	insert Ikdrfaxon
	gbar_Ikdrfaxon = 0.0006
	insert Ikdrsaxon
	gbar_Ikdrsaxon = 0.00023
	Ra=300
	cm=0.9
	ek=-95
	insert Naaxon
	gna_Naaxon = 0.0117
	ena=90
/* 
        soma distance(0,0.5)
        dist1=distance(0)
        dist2=distance(1)
        tav.append(dist1)
	*/ 	
        
}


}

/*
objref f1, f2

f1 = new File()
f1.ropen("OLM_1812_optimized_syn_per_area_excit.dat")


f2 = new File()
f2.ropen("OLM_1812_optimized_syn_per_area_inhib.dat")

proc syn_per_area_define(){

forsec basal{
		insert excit
		insert inhib
        //rate_excit = 0
        //rate_inhib = 0
	for (x,0){
		syn_per_area_excit = f1.scanvar()
		syn_per_area_inhib = f2.scanvar()
	}
}
forsec somatic{
		insert excit
		insert inhib
        //rate_excit = 0
        //rate_inhib = 0
	for (x,0){
		syn_per_area_excit = f1.scanvar()
		syn_per_area_inhib = f2.scanvar()
	}
}
}
*/

access soma

celldef()
//syn_per_area_define()
