load_file("subiter.hoc")
load_file("stdrun.hoc")

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, axon, dend[136]

proc topol() { local i
  connect axon(0), soma(0.5)
  connect dend(0), soma(0.5)
  for i = 1, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  connect dend[5](0), dend[1](1)
  connect dend[6](0), dend(1)
  for i = 7, 8 connect dend[i](0), dend[6](1)
  for i = 9, 10 connect dend[i](0), dend[i-1](1)
  connect dend[11](0), dend[9](1)
  for i = 12, 13 connect dend[i](0), dend[11](1)
  for i = 14, 15 connect dend[i](0), dend[13](1)
  connect dend[16](0), dend[8](1)
  for i = 17, 18 connect dend[i](0), dend[16](1)
  for i = 19, 20 connect dend[i](0), dend[18](1)
  for i = 21, 22 connect dend[i](0), dend[20](1)
  connect dend[23](0), soma(0.5)
  for i = 24, 28 connect dend[i](0), dend[i-1](1)
  connect dend[29](0), dend[27](1)
  connect dend[30](0), dend[26](1)
  for i = 31, 32 connect dend[i](0), dend[i-1](1)
  connect dend[33](0), dend[31](1)
  connect dend[34](0), dend[30](1)
  for i = 35, 36 connect dend[i](0), dend[34](1)
  connect dend[37](0), dend[25](1)
  for i = 38, 39 connect dend[i](0), dend[i-1](1)
  connect dend[40](0), dend[38](1)
  for i = 41, 42 connect dend[i](0), dend[i-1](1)
  connect dend[43](0), dend[41](1)
  connect dend[44](0), dend[40](1)
  for i = 45, 46 connect dend[i](0), dend[i-1](1)
  connect dend[47](0), dend[45](1)
  connect dend[48](0), dend[44](1)
  for i = 49, 50 connect dend[i](0), dend[48](1)
  for i = 51, 52 connect dend[i](0), dend[i-1](1)
  connect dend[53](0), dend[51](1)
  for i = 54, 55 connect dend[i](0), dend[i-1](1)
  connect dend[56](0), dend[54](1)
  for i = 57, 58 connect dend[i](0), dend[56](1)
  connect dend[59](0), dend[53](1)
  connect dend[60](0), dend[50](1)
  for i = 61, 62 connect dend[i](0), dend[60](1)
  for i = 63, 64 connect dend[i](0), dend[62](1)
  connect dend[65](0), dend[37](1)
  for i = 66, 67 connect dend[i](0), dend[65](1)
  for i = 68, 69 connect dend[i](0), dend[67](1)
  connect dend[70](0), dend[24](1)
  for i = 71, 72 connect dend[i](0), dend[i-1](1)
  connect dend[73](0), dend[71](1)
  for i = 74, 75 connect dend[i](0), dend[i-1](1)
  connect dend[76](0), dend[74](1)
  connect dend[77](0), dend[73](1)
  connect dend[78](0), dend[70](1)
  for i = 79, 80 connect dend[i](0), dend[i-1](1)
  connect dend[81](0), dend[79](1)
  connect dend[82](0), dend[78](1)
  connect dend[83](0), dend[23](1)
  connect dend[84](0), soma(0.5)
  for i = 85, 87 connect dend[i](0), dend[i-1](1)
  connect dend[88](0), dend[86](1)
  for i = 89, 90 connect dend[i](0), dend[i-1](1)
  connect dend[91](0), dend[89](1)
  for i = 92, 93 connect dend[i](0), dend[91](1)
  for i = 94, 95 connect dend[i](0), dend[93](1)
  connect dend[96](0), dend[88](1)
  connect dend[97](0), dend[85](1)
  for i = 98, 99 connect dend[i](0), dend[97](1)
  connect dend[100](0), dend[84](1)
  for i = 101, 102 connect dend[i](0), dend[i-1](1)
  connect dend[103](0), dend[101](1)
  connect dend[104](0), dend[100](1)
  for i = 105, 106 connect dend[i](0), dend[104](1)
  for i = 107, 108 connect dend[i](0), dend[106](1)
  connect dend[109](0), soma(0.5)
  for i = 110, 111 connect dend[i](0), dend[109](1)
  for i = 112, 115 connect dend[i](0), dend[i-1](1)
  connect dend[116](0), dend[114](1)
  for i = 117, 118 connect dend[i](0), dend[116](1)
  connect dend[119](0), dend[113](1)
  for i = 120, 121 connect dend[i](0), dend[119](1)
  connect dend[122](0), dend[112](1)
  for i = 123, 124 connect dend[i](0), dend[122](1)
  connect dend[125](0), dend[111](1)
  for i = 126, 128 connect dend[i](0), dend[i-1](1)
  connect dend[129](0), dend[127](1)
  for i = 130, 131 connect dend[i](0), dend[129](1)
  connect dend[132](0), dend[126](1)
  for i = 133, 134 connect dend[i](0), dend[132](1)
  connect dend[135](0), dend[125](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-1216.3, 5283.5, -523.54, 8.13131)
	pt3dadd(-1216.51, 5283.6, -520.94, 12.2841)
	pt3dadd(-1217.06, 5283.59, -517.79, 13.6487)
	pt3dadd(-1217.21, 5283.43, -516.11, 15.4973)
	pt3dadd(-1217.6, 5283.96, -514.64, 15.605)
	pt3dadd(-1218.52, 5284.4, -513.01, 15.1697)
	pt3dadd(-1219.24, 5284.51, -511.22, 15.0417)
	pt3dadd(-1219.87, 5284.57, -508.669, 13.4079)
	pt3dadd(-1220.4, 5284.62, -506.94, 11.3377)
	pt3dadd(-1220.74, 5284.52, -504.71, 9.87505)
	pt3dadd(-1221.7, 5284.86, -502.71, 8.0831)
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  }
}
proc shape3d_2() {
  dend[6] {	pt3dadd(-1143.18, 5226.67, -506.25, 1.53)
	pt3dadd(-1141.44, 5224.58, -505.28, 1.53)
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  }
}
proc shape3d_3() {
  dend[10] {	pt3dadd(-1047.49, 5098.59, -472.67, 0.38)
	pt3dadd(-1048.5, 5097.69, -471.42, 0.38)
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  }
}
proc shape3d_4() {
  dend[15] {	pt3dadd(-1030.32, 5108.97, -504.63, 0.61)
	pt3dadd(-1030.32, 5108.97, -504.68, 0.61)
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  }
}
proc shape3d_5() {
  dend[19] {	pt3dadd(-1035.01, 5055.78, -448.85, 0.54)
	pt3dadd(-1035.63, 5055.14, -448.85, 0.54)
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  }
}
proc shape3d_6() {
  dend[24] {	pt3dadd(-1227.46, 5311.31, -530.56, 1.53)
	pt3dadd(-1227.31, 5312.43, -532.62, 1.38)
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  }
}
proc shape3d_7() {
  dend[26] {	pt3dadd(-1165.88, 5438.74, -702.55, 0.84)
	pt3dadd(-1164.72, 5438.84, -703.36, 0.84)
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  }
}
proc shape3d_8() {
  dend[35] {	pt3dadd(-1157.34, 5440.31, -806.28, 0.38)
	pt3dadd(-1156.9, 5439.33, -804.76, 0.38)
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  }
}
proc shape3d_9() {
  dend[45] {	pt3dadd(-1245.98, 5511.2, -750.24, 0.69)
	pt3dadd(-1246.61, 5511.62, -750.24, 0.69)
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  }
}
proc shape3d_10() {
  dend[52] {	pt3dadd(-1247.59, 5520.57, -723.27, 0.69)
	pt3dadd(-1247.81, 5520.94, -722.3, 0.69)
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  }
}
proc shape3d_11() {
  dend[59] {	pt3dadd(-1244.08, 5525.54, -701.73, 0.54)
	pt3dadd(-1244.08, 5525.54, -701.79, 0.54)
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  }
}
proc shape3d_12() {
  dend[66] {	pt3dadd(-1206.24, 5379.15, -598.6, 0.69)
	pt3dadd(-1205.04, 5377.98, -597.84, 0.69)
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  }
}
proc shape3d_13() {
  dend[70] {	pt3dadd(-1220.81, 5381.78, -615.85, 0.92)
	pt3dadd(-1219.89, 5382.81, -616.72, 0.92)
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  }
}
proc shape3d_14() {
  dend[77] {	pt3dadd(-1140.92, 5377.6, -704.5, 0.46)
	pt3dadd(-1140.55, 5377.82, -706.35, 0.46)
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  }
}
proc shape3d_15() {
  dend[81] {	pt3dadd(-1211.06, 5446.89, -672.11, 0.54)
	pt3dadd(-1211.59, 5446.98, -672.11, 0.54)
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  }
}
proc shape3d_16() {
  dend[84] {	pt3dadd(-1226.82, 5291.34, -522.73, 1.53)
	pt3dadd(-1228.44, 5292.24, -523.07, 1.15)
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  }
}
proc shape3d_17() {
  dend[89] {	pt3dadd(-1311.41, 5402.17, -587.36, 0.54)
	pt3dadd(-1311.41, 5402.17, -587.42, 0.54)
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  }
}
proc shape3d_18() {
  dend[93] {	pt3dadd(-1227.37, 5440.35, -696.47, 0.38)
	pt3dadd(-1227.35, 5440.43, -696.47, 0.38)
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  }
}
proc shape3d_19() {
  dend[97] {	pt3dadd(-1322.59, 5307.22, -479.34, 0.69)
	pt3dadd(-1322.57, 5306.43, -478.2, 0.54)
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  }
}
proc shape3d_20() {
  dend[99] {	pt3dadd(-1324.16, 5279.63, -446.79, 0.61)
	pt3dadd(-1323.79, 5278.97, -446.03, 0.61)
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  }
}
proc shape3d_21() {
  dend[99] {	pt3dadd(-1324.89, 5139.3, -283.43, 0.38)
	pt3dadd(-1324.63, 5138.08, -282.56, 0.38)
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  }
}
proc shape3d_22() {
  dend[103] {	pt3dadd(-1313.27, 5402.09, -430.62, 0.54)
	pt3dadd(-1314.23, 5403.34, -429.59, 0.54)
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  }
}
proc shape3d_23() {
  dend[106] {	pt3dadd(-1341.08, 5477.02, -436.1, 0.77)
	pt3dadd(-1341.23, 5477.98, -437.57, 0.77)
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  }
}
proc shape3d_24() {
  dend[110] {	pt3dadd(-1265.17, 5397.96, -364.16, 0.61)
	pt3dadd(-1265.17, 5397.96, -364.11, 0.61)
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  }
}
proc shape3d_25() {
  dend[117] {	pt3dadd(-1305.59, 5266.63, -331.12, 0.69)
	pt3dadd(-1305.08, 5268.76, -331.23, 0.69)
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  }
}
proc shape3d_26() {
  dend[124] {	pt3dadd(-1274.78, 5294.89, -352.49, 0.69)
	pt3dadd(-1275.47, 5295.5, -351.19, 0.69)
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  }
}
proc shape3d_27() {
  dend[130] {	pt3dadd(-1197.25, 5163.7, -301.66, 0.69)
	pt3dadd(-1197.46, 5161.56, -299.49, 0.69)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
}

objref all, somatic, axonal, basal
proc subsets() { local i
  objref all, somatic, axonal, basal
  all = new SectionList()
    soma all.append()
    axon all.append()
    for i=0, 135 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    axon axonal.append()

  basal = new SectionList()
    for i=0, 135 dend[i] basal.append()

}
proc geom() {
}
proc geom_nseg() {

  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }

}

celsius = 24

proc biophys() {
	forsec all {

	}	

	forsec basal {

        insert passsd
	g_passsd=1.1231e-05
	erev_passsd=-66.164
	insert Kleaksd
	gkl_Kleaksd=3.2258e-06
	insert IM
	gbar_IM = 0.000075
	insert IMminret
	gbar_IMminret=0 // 0.000075
	insert Ikdrf
	gbar_Ikdrf = 0.0006
	insert Ikdrs
	gbar_Ikdrs = 0.00023
	insert Ika
	gbar_Ika = 0.00025
	Ra=300
	cm=0.9
	ek=-95
	insert cal
	gcalbar_cal = 0.0025
	insert cad
	insert cat
	gbar_cat = 0.00025
	insert kca
	gkbar_kca = 0.00055
	insert Nadend
	gna_Nadend = 0.0117
	ena=90
	insert Ih
	gkhbar_Ih = 0.00005
	eh=-32
		

}
	forsec somatic {

        insert passsd
	g_passsd=1.1231e-05
	erev_passsd=-66.164
	insert Kleaksd
	gkl_Kleaksd=3.2258e-06
	Ra=300
	cm=0.9
	ek=-95
	insert IM
	gbar_IM=0.000075
	insert IMminret
	gbar_IMminret=0 // 0.000075
	insert Ikdrf
	gbar_Ikdrf = 0.0006
	insert Ikdrs
	gbar_Ikdrs = 0.00023
	insert Ika
	gbar_Ika = 0.00025
	insert Nasoma
	gna_Nasoma = 0.0107
	ena=90
	insert Ih
	gkhbar_Ih = 0.00005
	eh=-32
		
}
        
        
        
	forsec axonal {

        insert passaxon
	g_passaxon=6.1771e-05
	erev_passaxon=-66.164
	insert Kleakaxon
	gkl_Kleakaxon=1.7742e-05
	insert Ikdrfaxon
	gbar_Ikdrfaxon = 0.0006
	insert Ikdrsaxon
	gbar_Ikdrsaxon = 0.00023
	Ra=300
	cm=0.9
	ek=-95
	insert Naaxon
	gna_Naaxon = 0.0117
	ena=90
/* 
        soma distance(0,0.5)
        dist1=distance(0)
        dist2=distance(1)
        tav.append(dist1)
	*/ 	
        
}


}
/*
objref f1, f2

f1 = new File()
f1.ropen("OLM_1821_optimized_syn_per_area_excit.dat")


f2 = new File()
f2.ropen("OLM_1821_optimized_syn_per_area_inhib.dat")

proc syn_per_area_define(){

forsec basal{
		insert excit
		insert inhib
        //rate_excit = 0
        //rate_inhib = 0
	for (x,0){
		syn_per_area_excit = f1.scanvar()
		syn_per_area_inhib = f2.scanvar()
	}
}
forsec somatic{
		insert excit
		insert inhib
        //rate_excit = 0
        //rate_inhib = 0
	for (x,0){
		syn_per_area_excit = f1.scanvar()
		syn_per_area_inhib = f2.scanvar()
	}
}
}
*/

access soma

celldef()
//syn_per_area_define()
