proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, axon[7], dend[76]

proc topol() { local i
  connect axon(0), soma(0.5)
  for i = 1, 2 connect axon[i](0), axon[i-1](1)
  connect axon[3](0), axon[1](1)
  for i = 4, 5 connect axon[i](0), axon[3](1)
  connect axon[6](0), axon(1)
  connect dend(0), soma(0.5)
  for i = 1, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  for i = 5, 6 connect dend[i](0), dend[4](1)
  for i = 7, 8 connect dend[i](0), dend[6](1)
  connect dend[9](0), dend[1](1)
  for i = 10, 11 connect dend[i](0), dend[9](1)
  connect dend[12](0), dend(1)
  for i = 13, 15 connect dend[i](0), dend[i-1](1)
  connect dend[16](0), dend[14](1)
  connect dend[17](0), dend[13](1)
  for i = 18, 19 connect dend[i](0), dend[17](1)
  for i = 20, 21 connect dend[i](0), dend[19](1)
  connect dend[22](0), dend[12](1)
  for i = 23, 25 connect dend[i](0), dend[i-1](1)
  connect dend[26](0), dend[24](1)
  connect dend[27](0), dend[23](1)
  connect dend[28](0), dend[22](1)
  connect dend[29](0), soma(0.5)
  for i = 30, 31 connect dend[i](0), dend[i-1](1)
  connect dend[32](0), dend[30](1)
  connect dend[33](0), dend[29](1)
  for i = 34, 35 connect dend[i](0), dend[33](1)
  connect dend[36](0), soma(0.5)
  for i = 37, 40 connect dend[i](0), dend[i-1](1)
  connect dend[41](0), dend[39](1)
  connect dend[42](0), dend[38](1)
  connect dend[43](0), dend[37](1)
  for i = 44, 45 connect dend[i](0), dend[i-1](1)
  connect dend[46](0), dend[44](1)
  connect dend[47](0), dend[43](1)
  connect dend[48](0), dend[36](1)
  for i = 49, 50 connect dend[i](0), dend[48](1)
  connect dend[51](0), soma(0.5)
  for i = 52, 55 connect dend[i](0), dend[i-1](1)
  connect dend[56](0), dend[54](1)
  connect dend[57](0), dend[53](1)
  connect dend[58](0), dend[52](1)
  for i = 59, 60 connect dend[i](0), dend[i-1](1)
  connect dend[61](0), dend[59](1)
  connect dend[62](0), dend[58](1)
  for i = 63, 64 connect dend[i](0), dend[62](1)
  connect dend[65](0), dend[51](1)
  for i = 66, 67 connect dend[i](0), dend[i-1](1)
  connect dend[68](0), dend[66](1)
  for i = 69, 70 connect dend[i](0), dend[68](1)
  for i = 71, 72 connect dend[i](0), dend[70](1)
  connect dend[73](0), dend[65](1)
  for i = 74, 75 connect dend[i](0), dend[73](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-283.577, -1957.9, -426.54, 11.236)
	pt3dadd(-283.987, -1959.15, -424.52, 10.7385)
	pt3dadd(-283.992, -1959.88, -419.908, 12.8235)
	pt3dadd(-284.841, -1959.74, -414.97, 12.614)
	pt3dadd(-284.907, -1962.05, -412.63, 12.4601)
	pt3dadd(-284.202, -1961.04, -408.86, 11.23)
	pt3dadd(-285.267, -1961.68, -404.61, 13.7411)
	pt3dadd(-285.827, -1961.13, -401.37, 13.7665)
	pt3dadd(-285.975, -1962.39, -398.24, 12.8188)
	pt3dadd(-286.113, -1962.39, -394.25, 12.2868)
	pt3dadd(-286.333, -1961.82, -389.05, 10.9861)
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  }
}
proc shape3d_2() {
  dend[5] {	pt3dadd(-297.98, -1938.46, -89.38, 0.74)
	pt3dadd(-299.2, -1937.08, -89.32, 0.59)
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  }
}
proc shape3d_3() {
  dend[14] {	pt3dadd(-337.95, -1896.26, -354, 0.82)
	pt3dadd(-340.16, -1894.58, -356.13, 0.82)
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  }
}
proc shape3d_4() {
  dend[20] {	pt3dadd(-410.29, -1819.52, -27.93, 0.52)
	pt3dadd(-411.53, -1817.52, -25.12, 0.52)
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  }
}
proc shape3d_5() {
  dend[27] {	pt3dadd(-366.74, -1867.28, -49.55, 0.15)
	pt3dadd(-367.45, -1866.58, -46.68, 0.15)
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  }
}
proc shape3d_6() {
  dend[32] {	pt3dadd(-110.33, -2131.05, -536.63, 0.67)
	pt3dadd(-107.81, -2133.63, -536.63, 0.67)
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  }
}
proc shape3d_7() {
  dend[36] {	pt3dadd(-265.28, -1997.61, -386.77, 1.71)
	pt3dadd(-263.77, -1999.93, -386.45, 1.71)
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  }
}
proc shape3d_8() {
  dend[43] {	pt3dadd(-198.93, -2049.42, -495.31, 0.89)
	pt3dadd(-198.32, -2050.34, -501, 0.89)
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  }
}
proc shape3d_9() {
  dend[56] {	pt3dadd(-309.82, -1830.1, -596.11, 0.67)
	pt3dadd(-310.1, -1828.38, -596.11, 0.67)
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  }
}
proc shape3d_10() {
  dend[61] {	pt3dadd(-373.83, -1751.12, -493.77, 0.52)
	pt3dadd(-375.13, -1747.82, -493.77, 0.52)
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  }
}
proc shape3d_11() {
  dend[67] {	pt3dadd(-218.08, -1905.54, -527.34, 0.67)
	pt3dadd(-216.51, -1904.68, -527.28, 0.67)
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  }
}
proc shape3d_12() {
  dend[75] {	pt3dadd(-197.29, -1968.51, -660.68, 0.59)
	pt3dadd(-195.47, -1967.26, -664.67, 0.59)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
}

objref all, somatic, axonal, basal
proc subsets() { local i
  objref all, somatic, axonal, basal
  all = new SectionList()
    soma all.append()
    for i=0, 6 axon[i] all.append()
    for i=0, 75 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 6 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 75 dend[i] basal.append()

}
proc geom() {
}
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}
proc biophys() {
	forsec all {
		Ra = 100
		cm = 0.544384364851178
		insert pas
		e_pas = -71.3582782352674
		g_pas = 0.0000153517511693223
		insert H_2comp_rate
		gmax_H_2comp_rate = 0.0000409559103792236
		fastRate_H_2comp_rate = 0.174142411081962
	}	
}
objref f1, f2

f1 = new File()
f1.ropen("HS_5102_optimized_syn_per_area_excit.dat") //path to file is needed!


f2 = new File()
f2.ropen("HS_5102_optimized_syn_per_area_inhib.dat") //path to file is needed!

proc syn_per_area_define(){

forsec basal{
		insert excit
		insert inhib
        rate_excit = 1
        //rate_inhib = 0
	for (x,0){
		syn_per_area_excit = f1.scanvar()
		syn_per_area_inhib = f2.scanvar()
	}
}
forsec somatic{
		insert excit
		insert inhib
        rate_excit = 1
        //rate_inhib = 0
	for (x,0){
		syn_per_area_excit = f1.scanvar()
		syn_per_area_inhib = f2.scanvar()
	}
}
}


access soma

celldef()
syn_per_area_define()
