proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, axon, dend[131]

proc topol() { local i
  connect axon(0), soma(0.5)
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend(1)
  connect dend[3](0), soma(0.5)
  for i = 4, 6 connect dend[i](0), dend[i-1](1)
  connect dend[7](0), dend[5](1)
  for i = 8, 9 connect dend[i](0), dend[i-1](1)
  connect dend[10](0), dend[8](1)
  connect dend[11](0), dend[4](1)
  for i = 12, 13 connect dend[i](0), dend[11](1)
  for i = 14, 15 connect dend[i](0), dend[13](1)
  connect dend[16](0), dend[3](1)
  for i = 17, 20 connect dend[i](0), dend[i-1](1)
  connect dend[21](0), dend[19](1)
  for i = 22, 23 connect dend[i](0), dend[i-1](1)
  connect dend[24](0), dend[22](1)
  connect dend[25](0), dend[21](1)
  connect dend[26](0), dend[18](1)
  for i = 27, 28 connect dend[i](0), dend[26](1)
  connect dend[29](0), dend[17](1)
  for i = 30, 31 connect dend[i](0), dend[29](1)
  connect dend[32](0), dend[16](1)
  connect dend[33](0), soma(0.5)
  for i = 34, 37 connect dend[i](0), dend[i-1](1)
  connect dend[38](0), dend[36](1)
  for i = 39, 40 connect dend[i](0), dend[i-1](1)
  connect dend[41](0), dend[39](1)
  connect dend[42](0), dend[38](1)
  for i = 43, 44 connect dend[i](0), dend[42](1)
  connect dend[45](0), dend[35](1)
  for i = 46, 49 connect dend[i](0), dend[i-1](1)
  connect dend[50](0), dend[48](1)
  connect dend[51](0), dend[47](1)
  connect dend[52](0), dend[46](1)
  for i = 53, 54 connect dend[i](0), dend[52](1)
  connect dend[55](0), dend[45](1)
  connect dend[56](0), dend[34](1)
  for i = 57, 58 connect dend[i](0), dend[56](1)
  for i = 59, 60 connect dend[i](0), dend[58](1)
  for i = 61, 62 connect dend[i](0), dend[60](1)
  for i = 63, 64 connect dend[i](0), dend[62](1)
  connect dend[65](0), dend[33](1)
  for i = 66, 67 connect dend[i](0), dend[i-1](1)
  connect dend[68](0), dend[66](1)
  connect dend[69](0), dend[65](1)
  for i = 70, 71 connect dend[i](0), dend[i-1](1)
  connect dend[72](0), dend[70](1)
  connect dend[73](0), dend[69](1)
  for i = 74, 75 connect dend[i](0), dend[73](1)
  connect dend[76](0), soma(0.5)
  for i = 77, 79 connect dend[i](0), dend[i-1](1)
  connect dend[80](0), dend[78](1)
  for i = 81, 82 connect dend[i](0), dend[80](1)
  connect dend[83](0), dend[77](1)
  for i = 84, 85 connect dend[i](0), dend[83](1)
  for i = 86, 87 connect dend[i](0), dend[85](1)
  connect dend[88](0), dend[76](1)
  for i = 89, 91 connect dend[i](0), dend[i-1](1)
  connect dend[92](0), dend[90](1)
  connect dend[93](0), dend[89](1)
  for i = 94, 98 connect dend[i](0), dend[i-1](1)
  connect dend[99](0), dend[97](1)
  for i = 100, 101 connect dend[i](0), dend[99](1)
  connect dend[102](0), dend[96](1)
  for i = 103, 104 connect dend[i](0), dend[102](1)
  connect dend[105](0), dend[95](1)
  connect dend[106](0), dend[94](1)
  for i = 107, 108 connect dend[i](0), dend[106](1)
  for i = 109, 110 connect dend[i](0), dend[108](1)
  connect dend[111](0), dend[93](1)
  connect dend[112](0), dend[88](1)
  for i = 113, 115 connect dend[i](0), dend[i-1](1)
  connect dend[116](0), dend[114](1)
  for i = 117, 118 connect dend[i](0), dend[116](1)
  connect dend[119](0), dend[113](1)
  for i = 120, 121 connect dend[i](0), dend[119](1)
  for i = 122, 123 connect dend[i](0), dend[121](1)
  connect dend[124](0), dend[112](1)
  for i = 125, 126 connect dend[i](0), dend[i-1](1)
  connect dend[127](0), dend[125](1)
  connect dend[128](0), dend[124](1)
  for i = 129, 130 connect dend[i](0), dend[128](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(2.16839, -111.476, -256.98, 6.19496)
	pt3dadd(1.70451, -112.685, -257.03, 9.25435)
	pt3dadd(0.55057, -114.193, -260.94, 11.6854)
	pt3dadd(0.188892, -114.475, -262.45, 12.0621)
	pt3dadd(0.610158, -114.617, -266.37, 12.8558)
	pt3dadd(0.459525, -115.011, -270.28, 12.5641)
	pt3dadd(1.47815, -114.265, -275.75, 10.1176)
	pt3dadd(2.28606, -114.272, -279.41, 8.12422)
	pt3dadd(3.90751, -115.33, -281.96, 6.0361)
  }
  axon {pt3dclear()
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  }
}
proc shape3d_2() {
  dend[8] {	pt3dadd(-80.9, -180.54, -101.13, 0.61)
	pt3dadd(-79.98, -183.75, -99.41, 0.61)
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  }
}
proc shape3d_3() {
  dend[19] {	pt3dadd(-58.37, -212.46, -134.72, 0.38)
	pt3dadd(-58.89, -213.8, -137.12, 0.38)
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  }
}
proc shape3d_4() {
  dend[34] {	pt3dadd(5.39, -101.83, -242.79, 2.14)
	pt3dadd(5.52, -101.22, -239.14, 2.14)
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  }
}
proc shape3d_5() {
  dend[47] {  }
  dend[48] {pt3dclear()
	pt3dadd(-23.6, -18.86, 10.95, 0.46)
	pt3dadd(-23.1, -18.04, 11.11, 0.46)
	pt3dadd(-22.86, -17.39, 13.56, 0.46)
	pt3dadd(-22.27, -16.2, 14.76, 0.46)
	pt3dadd(-21.81, -15.29, 16.69, 0.46)
	pt3dadd(-21.12, -14.36, 17.73, 0.46)
	pt3dadd(-21.75, -13.04, 18.88, 0.46)
	pt3dadd(-21.33, -12.59, 22.11, 0.46)
	pt3dadd(-21.63, -12.21, 25.5, 0.46)
	pt3dadd(-22.29, -11.35, 25.61, 0.46)
	pt3dadd(-21.11, -10.69, 27.96, 0.46)
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  }
}
proc shape3d_6() {
  dend[61] {	pt3dadd(-17.19, -58.79, -36.67, 0.54)
	pt3dadd(-13.84, -57.39, -35.78, 0.54)
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  }
}
proc shape3d_7() {
  dend[70] {	pt3dadd(25.05, 28.33, -207.53, 0.69)
  }
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  }
}
proc shape3d_8() {
  dend[85] {	pt3dadd(-14.05, -224.31, -350.39, 0.61)
	pt3dadd(-17.22, -224.85, -350.39, 0.61)
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  }
}
proc shape3d_9() {
  dend[106] {	pt3dadd(49.39, -116.82, -459.82, 1)
	pt3dadd(50.37, -117.83, -463.26, 1)
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  }
}
proc shape3d_10() {
  dend[118] {	pt3dadd(-17.22, -193.93, -406.46, 0.08)
	pt3dadd(-16.52, -195.03, -406.98, 0.08)
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  }
}
proc shape3d_11() {
  dend[127] {	pt3dadd(91.91, -171.19, -648.52, 0.46)
	pt3dadd(92.48, -172.49, -655.98, 0.46)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
}

objref all, somatic, axonal, basal
proc subsets() { local i
  objref all, somatic, axonal, basal
  all = new SectionList()
    soma all.append()
    axon all.append()
    for i=0, 130 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    axon axonal.append()

  basal = new SectionList()
    for i=0, 130 dend[i] basal.append()

}
proc geom() {
}
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}
proc biophys() {
	forsec all {
		Ra = 100
		cm = 0.899568870998787
		insert pas
		e_pas = -70.7138147593573
		g_pas = 0.0000314079377683983
		insert H_2comp_rate
		gmax_H_2comp_rate = 0.000135198235245421
		fastRate_H_2comp_rate = 0.01
	}	
}
objref f1, f2

f1 = new File()
f1.ropen("OLM_1811_optimized_syn_per_area_excit.dat") //path to file is needed!


f2 = new File()
f2.ropen("OLM_1811_optimized_syn_per_area_inhib.dat") //path to file is needed!

proc syn_per_area_define(){

forsec basal{
		insert excit
		insert inhib
        rate_excit = 1
        //rate_inhib = 0
	for (x,0){
		syn_per_area_excit = f1.scanvar()
		syn_per_area_inhib = f2.scanvar()
	}
}
forsec somatic{
		insert excit
		insert inhib
        rate_excit = 1
        //rate_inhib = 0
	for (x,0){
		syn_per_area_excit = f1.scanvar()
		syn_per_area_inhib = f2.scanvar()
	}
}
}


access soma

celldef()
syn_per_area_define()
