proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
}

create soma, axon, dend[104]

proc topol() { local i
  connect axon(0), soma(0.5)
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend[i-1](1)
  connect dend[3](0), dend[1](1)
  connect dend[4](0), dend(1)
  connect dend[5](0), soma(0.5)
  for i = 6, 9 connect dend[i](0), dend[i-1](1)
  connect dend[10](0), dend[8](1)
  for i = 11, 12 connect dend[i](0), dend[10](1)
  connect dend[13](0), dend[7](1)
  for i = 14, 15 connect dend[i](0), dend[13](1)
  connect dend[16](0), dend[6](1)
  for i = 17, 18 connect dend[i](0), dend[16](1)
  connect dend[19](0), dend[5](1)
  for i = 20, 23 connect dend[i](0), dend[i-1](1)
  connect dend[24](0), dend[22](1)
  connect dend[25](0), dend[21](1)
  for i = 26, 27 connect dend[i](0), dend[i-1](1)
  connect dend[28](0), dend[26](1)
  for i = 29, 30 connect dend[i](0), dend[28](1)
  for i = 31, 32 connect dend[i](0), dend[30](1)
  connect dend[33](0), dend[25](1)
  for i = 34, 35 connect dend[i](0), dend[33](1)
  connect dend[36](0), dend[20](1)
  connect dend[37](0), dend[19](1)
  for i = 38, 39 connect dend[i](0), dend[37](1)
  for i = 40, 41 connect dend[i](0), dend[39](1)
  for i = 42, 44 connect dend[i](0), dend[i-1](1)
  connect dend[45](0), dend[43](1)
  connect dend[46](0), dend[42](1)
  connect dend[47](0), dend[41](1)
  connect dend[48](0), soma(0.5)
  for i = 49, 51 connect dend[i](0), dend[i-1](1)
  connect dend[52](0), dend[50](1)
  connect dend[53](0), dend[49](1)
  connect dend[54](0), dend[48](1)
  for i = 55, 56 connect dend[i](0), dend[i-1](1)
  connect dend[57](0), dend[55](1)
  connect dend[58](0), dend[54](1)
  connect dend[59](0), soma(0.5)
  for i = 60, 61 connect dend[i](0), dend[59](1)
  for i = 62, 65 connect dend[i](0), dend[i-1](1)
  connect dend[66](0), dend[64](1)
  for i = 67, 68 connect dend[i](0), dend[66](1)
  for i = 69, 70 connect dend[i](0), dend[68](1)
  connect dend[71](0), dend[63](1)
  for i = 72, 73 connect dend[i](0), dend[71](1)
  connect dend[74](0), dend[62](1)
  for i = 75, 76 connect dend[i](0), dend[74](1)
  connect dend[77](0), dend[61](1)
  for i = 78, 79 connect dend[i](0), dend[77](1)
  for i = 80, 81 connect dend[i](0), soma(0.5)
  for i = 82, 83 connect dend[i](0), dend[i-1](1)
  connect dend[84](0), dend[82](1)
  for i = 85, 87 connect dend[i](0), dend[i-1](1)
  connect dend[88](0), dend[86](1)
  for i = 89, 90 connect dend[i](0), dend[88](1)
  connect dend[91](0), dend[85](1)
  connect dend[92](0), dend[84](1)
  connect dend[93](0), dend[81](1)
  for i = 94, 96 connect dend[i](0), dend[i-1](1)
  connect dend[97](0), dend[95](1)
  for i = 98, 99 connect dend[i](0), dend[97](1)
  connect dend[100](0), dend[94](1)
  for i = 101, 102 connect dend[i](0), dend[100](1)
  connect dend[103](0), dend[93](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(43.9458, -24.7257, -329.36, 3.24289)
	pt3dadd(44.5934, -25.5509, -332.42, 6.64086)
	pt3dadd(43.6684, -25.3069, -335.03, 11.9795)
	pt3dadd(43.317, -24.4749, -339.53, 15.2016)
	pt3dadd(43.8534, -23.5759, -343.59, 15.6106)
	pt3dadd(44.9673, -24.312, -348.254, 15.557)
	pt3dadd(46.0421, -25.0588, -350.81, 14.3748)
	pt3dadd(47.2853, -25.5607, -354.09, 14.3305)
	pt3dadd(43.0924, -22.063, -356.2, 4.7506)
  }
  axon {pt3dclear()
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  }
}
proc shape3d_2() {
  dend[4] {	pt3dadd(52.2, -75.96, -312.69, 1.06)
	pt3dadd(51.92, -77.42, -312.69, 1.06)
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  }
}
proc shape3d_3() {
  dend[8] {	pt3dadd(60.31, -57.59, -494.88, 1.14)
	pt3dadd(60.58, -58.14, -497.21, 1.14)
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  }
}
proc shape3d_4() {
  dend[15] {	pt3dadd(54.08, -94.99, -494.88, 0.81)
	pt3dadd(54.56, -96.35, -494.88, 0.65)
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  }
}
proc shape3d_5() {
  dend[19] {	pt3dadd(71.56, -18.47, -350.09, 2.2)
	pt3dadd(71.89, -16.85, -352.32, 2.2)
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  }
}
proc shape3d_6() {
  dend[25] {	pt3dadd(76.64, 113.79, -383.05, 1.06)
	pt3dadd(77.41, 115.47, -383.05, 1.06)
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  }
}
proc shape3d_7() {
  dend[32] {	pt3dadd(46.07, 262.92, -427.18, 0.57)
  }
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  }
}
proc shape3d_8() {
  dend[36] {	pt3dadd(-4.42, 156.63, -255.89, 0.65)
	pt3dadd(-5.19, 156.29, -254.72, 0.65)
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  }
}
proc shape3d_9() {
  dend[44] {	pt3dadd(12.65, 212.4, -565.63, 0.57)
	pt3dadd(11.83, 214.53, -565.63, 0.57)
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  }
}
proc shape3d_10() {
  dend[51] {	pt3dadd(34.13, 138.5, -504.49, 0.73)
	pt3dadd(35.64, 139.15, -501.27, 0.73)
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  }
}
proc shape3d_11() {
  dend[56] {	pt3dadd(62.49, 1.67, -545.95, 0.73)
	pt3dadd(61.94, 1.39, -549.68, 0.73)
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  }
}
proc shape3d_12() {
  dend[62] {	pt3dadd(17.44, 90.87, -260.83, 1.06)
	pt3dadd(17.67, 92.58, -260.83, 1.14)
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  }
}
proc shape3d_13() {
  dend[71] {	pt3dadd(0.44, 111.42, -237.43, 0.81)
	pt3dadd(-0.92, 113.98, -236.15, 0.81)
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  }
}
proc shape3d_14() {
  dend[79] {	pt3dadd(2.93, 89.19, -297.51, 0.9)
	pt3dadd(0.59, 90.44, -298.85, 0.81)
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  }
}
proc shape3d_15() {
  dend[81] {	pt3dadd(40.63, -23.56, -302.91, 1.79)
	pt3dadd(40.46, -22.77, -299.85, 1.79)
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  }
}
proc shape3d_16() {
  dend[86] {	pt3dadd(16, 52.33, -3, 0.73)
	pt3dadd(16.83, 52.75, -2.22, 0.73)
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  }
}
proc shape3d_17() {
  dend[95] {	pt3dadd(23.85, 85.02, -20.18, 1.3)
	pt3dadd(24.11, 84.98, -16.9, 1.3)
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  }
}
proc shape3d_18() {
  dend[103] {	pt3dadd(0.27, 131.91, -108.27, 0.81)
	pt3dadd(-0.26, 134.02, -108.27, 0.81)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
}

objref all, somatic, axonal, basal
proc subsets() { local i
  objref all, somatic, axonal, basal
  all = new SectionList()
    soma all.append()
    axon all.append()
    for i=0, 103 dend[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    axon axonal.append()

  basal = new SectionList()
    for i=0, 103 dend[i] basal.append()

}
proc geom() {
}
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.9)/2)*2 + 1  }
}
proc biophys() {
	forsec all {
		Ra = 100
		cm = 0.632676710184735
		insert pas
		e_pas = -71.0722317277006
		g_pas = 0.0000197111024482588
		insert H_2comp_rate
		gmax_H_2comp_rate = 0.0000902905829094056
		fastRate_H_2comp_rate = 0.0478776587009822

	}	
}
objref f1, f2

f1 = new File()
f1.ropen("OLM_1831_optimized_syn_per_area_excit.dat") //path to file is needed!


f2 = new File()
f2.ropen("OLM_1831_optimized_syn_per_area_inhib.dat") //path to file is needed!

proc syn_per_area_define(){

forsec basal{
		insert excit
		insert inhib
        rate_excit = 1
        //rate_inhib = 0
	for (x,0){
		syn_per_area_excit = f1.scanvar()
		syn_per_area_inhib = f2.scanvar()
	}
}
forsec somatic{
		insert excit
		insert inhib
        rate_excit = 1
        //rate_inhib = 0
	for (x,0){
		syn_per_area_excit = f1.scanvar()
		syn_per_area_inhib = f2.scanvar()
	}
}
}


access soma

celldef()
syn_per_area_define()
